PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = $"https://sx.sona-systems.com/webstudy_credit.aspx?experiment_id=1621&credit_token=2b8d0d3e731c48929c2a06e168ff391d&survey_code=" + expInfo['participant']
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [3840, 2160]
  expName = dual-d-detection
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Both
      Begin Experiment:
        N1path = 'meh'
        N2path = 'meh'
        Tpath  = 'meh'
      Begin JS Experiment:
        N1path = "meh";
        N2path = "meh";
        Tpath = "meh";
      Begin JS Routine:
        N1path = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
        N2path = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');

        if ((trialtype === 'N')) {
            Tpath = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
        } else {
            Tpath = ['stimuli/S/SCS', contrast_lvl, '/', randomIntFromInterval(1, 20), '.bmp'].join('');
        }
      Begin Routine:
        N1path = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
        N2path = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))

        if trialtype=='N':
            Tpath = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
        else:
            Tpath = 'stimuli/S/SCS{contrast}/{number}.bmp'.format(contrast=contrast_lvl,number=np.asscalar(np.random.randint(1,20,size=1)))
      End JS Routine:
        //if ((key_resp.corr === 1)) {
        //    corrD1 = 1;
        //    wrongD1 = 0;
        //} else {
        //    corrD1 = 0;
        //    wrongD1 = 1;
        //}

        psychoJS.experiment.addData('decision_D1', 1);
        psychoJS.experiment.addData('contrast_lvl_D1', contrast_lvl);
        psychoJS.experiment.addData('Tpath_D1', Tpath);
      End Routine:
        if key_resp.corr == 1:
            corrD1 = 1
            wrongD1 = 0
        else:
            corrD1 = 0
            wrongD1 = 1
    PolygonComponent fixation
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size [set every repeat] = $(0.5*x_scale, 0.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
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    ImageComponent noise1
      image [set every repeat] = $N1path
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
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    ImageComponent test_stimulus
      image [set every repeat] = $Tpath 
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
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    ImageComponent noise2
      image [set every repeat] = $N2path
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp
      allowedKeys = 's','n'
      correctAns = $cresp
      forceEndRoutine = True
      startVal [time (s)] = 0.9
      store = first key
      storeCorrect = True
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    TextComponent decision_order_0
      letterHeight [set every repeat] = 0.6*y_scale
      pos [set every repeat] = $(-0.5*x_scale, 4*y_scale)
      startVal [time (s)] = 0.0
      text = 1
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  Routine intro
    TextComponent instructions
      letterHeight [set every repeat] = 0.5*y_scale
      startVal [time (s)] = 0.0
      text = Press the 'Enter' key to begin the experiment.
      units = pix
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    KeyboardComponent ready
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent initializeJS
      Code Type = JS
      Begin JS Experiment:
        randomIntFromInterval = function(min, max) {
          return Math.floor(Math.random() * (max - min + 1) + min);
        }

        win=psychoJS.window;

        average = (arr) => (arr.reduce((a, b) => (a + b), 0)) / arr.length

        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;

        round = function (a) {
            return Math.round(a);
        }
      Begin JS Routine:
        // Expose some general PsychoJS objects (debugging)
        // window.psychoJS = psychoJS;
  Routine d2_correct
    CodeComponent code_d2_c1
      Code Type = Both
      Begin JS Routine:
        N1path = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
        N2path = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
        Tpath = ['stimuli/S/SCS', contrast_lvl, '/', randomIntFromInterval(1, 20), '.bmp'].join('');
      Begin Routine:
        N1path = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
        N2path = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
        Tpath = 'stimuli/S/SCS{contrast}/{number}.bmp'.format(contrast=contrast_lvl,number=np.asscalar(np.random.randint(1,20,size=1)))
      End JS Routine:
        psychoJS.experiment.addData('decision_D2', 2);
        psychoJS.experiment.addData('contrast_lvl_D2', contrast_lvl);
        psychoJS.experiment.addData('Tpath_D2', Tpath);

        trials.finished=true;
    PolygonComponent fixation_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size [set every repeat] = $(0.5*x_scale, 0.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
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    ImageComponent noise1_2
      image [set every repeat] = $N1path
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
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    ImageComponent test_stimulus_2
      image [set every repeat] = $Tpath
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
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    ImageComponent noise2_2
      image [set every repeat] = $N2path 
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp_corrD1
      allowedKeys = 's','n'
      correctAns = s
      forceEndRoutine = True
      startVal [time (s)] = 0.9
      store = first key
      storeCorrect = True
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    TextComponent decision_order_2
      letterHeight [set every repeat] = 0.6*y_scale
      pos [set every repeat] = $(0.5*x_scale, 4*y_scale)
      startVal [time (s)] = 0.0
      text = 2
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  Routine d2_wrong
    CodeComponent code_d2_w1
      Code Type = Both
      Begin JS Routine:
        N1path = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
        N2path = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
        Tpath = ['stimuli/N/', randomIntFromInterval(1, 200), '.bmp'].join('');
      Begin Routine:
        N1path = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
        N2path = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
        Tpath = 'stimuli/N/{number}.bmp'.format(number=np.asscalar(np.random.randint(1,200,size=1)))
      End JS Routine:
        psychoJS.experiment.addData('decision_D2', 2);
        psychoJS.experiment.addData('contrast_lvl_D2', contrast_lvl);
        psychoJS.experiment.addData('Tpath_D2', Tpath);

        trials.finished=true;
    PolygonComponent fixation_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size [set every repeat] = $(0.5*x_scale, 0.5*y_scale)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
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    ImageComponent noise1_3
      image [set every repeat] = $N1path 
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.1
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    ImageComponent test_stimulus_3
      image [set every repeat] = $Tpath
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.1
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    ImageComponent noise2_3
      image [set every repeat] = $N2path 
      size [set every repeat] = $(4*x_scale, 4*y_scale)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp_wrongD1
      allowedKeys = 's','n'
      correctAns = n
      forceEndRoutine = True
      startVal [time (s)] = 0.9
      store = first key
      storeCorrect = True
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    TextComponent decision_order
      letterHeight [set every repeat] = 0.6*y_scale
      pos [set every repeat] = $(0.5*x_scale, 4*y_scale)
      startVal [time (s)] = 0.0
      text = 2
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  Routine branch
    PolygonComponent placeholder_4
      fillColor = $[-0.004,-0.004,-0.004]
      lineColor = $[-0.004,-0.004,-0.004]
      lineWidth = 2
      nVertices = 8
      opacity = 0
      pos = (1, 1)
      shape = regular polygon...
      size = (0.00001, 0.0001)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      units = height
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        corrD1 = 0
        wrongD1 = 0
      Begin Routine:
        # debug
        #print(cresp)
        #print(key_resp.corr)


        if key_resp.corr == 1:
            corrD1 = 1
            wrongD1 = 0
        else:
            corrD1 = 0
            wrongD1 = 1
  Routine feedback_3
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        if key_resp.corr == 1:
            if key_resp_corrD1.corr== 1 :
                msg="Your 2nd decision was correct"
            else:
                msg="Your 2nd decision was wrong"
        else:
            if key_resp_wrongD1.corr== 1:
                msg="Your 2nd decision was correct"
            else:
                msg="Your 2nd decision was wrong"
    TextComponent feedback_text
      color = $[-1.000,-1.000,-1.000]
      letterHeight [set every repeat] = 0.5*y_scale
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $msg
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  Routine adjust_contrast
    CodeComponent adjCode
      Code Type = Both
      Begin Experiment:
        contrast_lvl = 10
        acc_current = 0.7
      Begin JS Experiment:
        contrast_lvl = 10;
        acc_current = 0.7;
      Begin JS Routine:
        nTrialsSoFar = psychoJS.experiment._trialsData.length;
        nCorr = 0;
        eachResp = 0;
        for (eachResp=nTrialsSoFar-19; eachResp<nTrialsSoFar; eachResp++)
        {
          if (typeof psychoJS.experiment._trialsData[eachResp]['key_resp.corr'] !== 'undefined')
            {
              nCorr += psychoJS.experiment._trialsData[eachResp]['key_resp.corr'];
            }
        }
        acc_current = nCorr/10;

        //console.debug("### debug online contrast adjustment ###")
        //console.debug("current contrast: ",contrast_lvl)
        //console.debug("running average of accuracy: ",acc_current)


        if ((acc_current > 0.75)) {
            contrast_lvl = (contrast_lvl - 1);
            //console.debug("contrast decreased to",contrast_lvl)
        }
        if ((acc_current < 0.65)) {
            contrast_lvl = (contrast_lvl + 1);
            //console.debug("contrast increased to",contrast_lvl)
        }
        if ((contrast_lvl < 1)) {
            contrast_lvl = 1;
        }
        if ((contrast_lvl > 10)) {
            contrast_lvl = 10;
        }

        //console.debug("### done ###")
      Begin Routine:
        # numpy array storing whether each response was correct (1) or not (0)
        acc_current = trials.data['key_resp.corr']
        acc_current = np.average(acc_current[-10:])

        if acc_current > 0.75:
            contrast_lvl = contrast_lvl - 1

        if acc_current < 0.65:
            contrast_lvl = contrast_lvl + 1


        # boundaries
        if contrast_lvl < 1:
            contrast_lvl = 1

        if contrast_lvl>10:
            contrast_lvl=10
    TextComponent pause
      letterHeight [set every repeat] = 0.5*y_scale
      startVal [time (s)] = 0.0
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      text:
        Need a break?

        Press any key to continue.
    KeyboardComponent press_continue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine screen_scale
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin JS Experiment:
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((win.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((win.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = win.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if (_pj.in_es6("space", keys)) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys)) {
                    y_scale = (round(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys)) {
                        y_scale = (round(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys)) {
                            x_scale = (round(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys)) {
                                x_scale = (round(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            screen_height = (round(((vsize * 10) / y_scale)) / 10);
            //text_bottom.text = (((((((("X Scale = " + x_scale.toString()) + unittext) + " per cm, Y Scale = ") + y_scale.toString()) + unittext) + " per cm\nScreen height = ") + screen_height.toString()) + " cm\n\nPress the space bar when done");
            ccimage.size = [(x_size * x_scale), (y_size * y_scale)];
        }
      End JS Routine:
        thisExp.addData("X Scale", x_scale);
        thisExp.addData("Y Scale", y_scale);
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.02
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card, using the following keys:
        Up/Down arrow keys for taller/shorter
        Left/right arrow keys for narrower/wider
    TextComponent text_bottom
      letterHeight = 0.02
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = height
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine ready_go
    TextComponent instructions_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Press any key to begin the experiment.
      units = height
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    KeyboardComponent ready_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_contrast
      Code Type = Both
      Begin JS Routine:
        contrast_lvl = 10;
        acc_current = 0.7;
      Begin Routine:
        contrast_lvl = 7
        acc_current = 0.7
  Routine filler
    PolygonComponent placeholder
      fillColor = $[-0.004,-0.004,-0.004]
      lineColor = $[-0.004,-0.004,-0.004]
      lineWidth = 2
      nVertices = 8
      opacity = 0
      pos = (1, 1)
      shape = regular polygon...
      size = (0.00001, 0.0001)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      units = height
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  Routine instructions_1
    ImageComponent slide1
      image = instru.png
      size [set every repeat] = $(1.5*17.78*x_scale, 1.5*10*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_instru1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine instructions_3
    ImageComponent slide1_2
      image = instru2.png
      size [set every repeat] = $(1.5*17.78*x_scale, 1.5*10*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_instru1_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine attention_check
    FormComponent form
      Data Format = columns
      Item Padding = 0.05
      Items = attention_check.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
  Routine practice_message_d1
    TextComponent instructions_4
      color = black
      letterHeight [set every repeat] = 0.5*y_scale
      startVal [time (s)] = 0.0
      units = pix
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      text:
        That was the first decision.

        If you gave the correct response
        (regardless of whether you pressed the S or N keys),
        in the second decision you will see a Signal.

        If instead your response was wrong,
        in the second decision you will see a patch containing only Noise.



        Press any key to continue to the second decision.
    KeyboardComponent ready_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_message_0
    TextComponent instructions_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        Now there will be 4 practice trials.

        Please pay attention to the stimuli and to how the stimulus displayed
        for the 2nd decision depends on the accuracy of your first response.

        Press any key to continue.
    KeyboardComponent ready_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_message_d2
    CodeComponent feedback_code_practice
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        if key_resp.corr == 1:
            if key_resp_corrD1.corr== 1 :
                msg="""Your 2nd decision was correct
        Moreover, since the stimulus in the 2nd decision contained a Signal,
        it means that your 1st response was also correct."""
            else:
                msg="""Your 2nd decision was wrong
        However, the stimulus in the 2nd decision contained a Signal,
        indicating that your 1st response was correct."""
        else:
            if key_resp_wrongD1.corr== 1:
                msg="""Your 2nd decision was correct
        However, the stimulus in the 2nd decision contained only Noise,
        indicating that your 1st response was wrong."""
            else:
                msg="""Your 2nd decision was wrong
        Moreover, since the stimulus in the 2nd decision contained only Noise,
        it means that your 1st response was also wrong."""
    TextComponent feedback_text_2
      color = $[-1.000,-1.000,-1.000]
      letterHeight [set every repeat] = 0.5*y_scale
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent ready_practice_d2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine filler
  Routine screen_scale
  Routine instructions_1
  Routine instructions_3
  Routine practice_message_0
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 2
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    Routine trial
    Routine branch
    Routine practice_message_d1
    LoopInitiator practice_correct loopType="TrialHandler"
      Selected rows = 0
      conditionsFile = conditions.csv
      isTrials = False
      loopType = sequential
      nReps = corrD1
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      Routine d2_correct
    LoopTerminator practice_correct
    LoopInitiator practice_wrong loopType="TrialHandler"
      Selected rows = 1
      conditionsFile = conditions.csv
      isTrials = False
      loopType = sequential
      nReps = wrongD1
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      Routine d2_wrong
    LoopTerminator practice_wrong
    Routine practice_message_d2
  LoopTerminator practice_loop
  Routine ready_go
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('trialtype', 'S'), ('cresp', 's')]),
        OrderedDict([('trialtype', 'N'), ('cresp', 'n')])]
      Routine trial
      Routine branch
      LoopInitiator correct_D1 loopType="TrialHandler"
        Selected rows = 0
        conditionsFile = conditions.csv
        isTrials = False
        loopType = random
        nReps = corrD1
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        conditions:
          [OrderedDict([('trialtype', 'S'), ('cresp', 's')]),
          OrderedDict([('trialtype', 'N'), ('cresp', 'n')])]
        Routine d2_correct
      LoopTerminator correct_D1
      LoopInitiator wrong_D1 loopType="TrialHandler"
        Selected rows = 1
        conditionsFile = conditions.csv
        isTrials = False
        loopType = random
        nReps = wrongD1
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        conditions:
          [OrderedDict([('trialtype', 'S'), ('cresp', 's')]),
          OrderedDict([('trialtype', 'N'), ('cresp', 'n')])]
        Routine d2_wrong
      LoopTerminator wrong_D1
      Routine feedback_3
    LoopTerminator trials
    Routine adjust_contrast
  LoopTerminator trials_2
